PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = king_devick
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Routines
  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the King Devick experiment.

        Press SPACE to continue.
    KeyboardComponent instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine demo_card_instructions
    TextComponent demo_instructions_text
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the Demonstration card.

        Read the lines of numbers left to right as quickly as you can without mistakes. If you do make a mistake, please continue reading the numbers.

        Press SPACE to begin. Press SPACE again as soon as you finish reading all numbers.
    KeyboardComponent demo_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine test1_card_instructions
    TextComponent test1_instructions_text
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the Test 1 card.

        Read the lines of numbers left to right as quickly as you can without mistakes. If you do make a mistake, please continue reading the numbers.

        Press SPACE to begin. Press SPACE again as soon as you finish reading all numbers.
    KeyboardComponent test1_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine test2_card_instructions
    TextComponent test2_instructions_text
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the Test 2 card.

        Read the lines of numbers left to right as quickly as you can without mistakes. If you do make a mistake, please continue reading the numbers.

        Press SPACE to begin. Press SPACE again as soon as you finish reading all numbers.
    KeyboardComponent test2_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine test3_card_instructions
    TextComponent test3_instructions_text
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the Test 3 card.

        Read the lines of numbers left to right as quickly as you can without mistakes. If you do make a mistake, please continue reading the numbers.

        Press SPACE to begin. Press SPACE again as soon as you finish reading all numbers.
    KeyboardComponent test3_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine demo_card_instructions_2
    TextComponent demo_instructions_text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the demonstration card.

        Press SPACE to continue.
    KeyboardComponent demo_instructions_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine demo_card
    CodeComponent demo_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("practice_start")
    ImageComponent demo_image
      image = king_devick_stimuli\demo_card.jpg
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
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    KeyboardComponent demo_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test1_card
    CodeComponent test1_code
      Code Type = Py
      Begin Experiment:
        marker.send_marker("stimuli_start")
    ImageComponent test1_image
      image = king_devick_stimuli\test1_card.jpg
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
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    KeyboardComponent test1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test2_card
    CodeComponent test2_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("stimuli_start")
    ImageComponent test2_image
      image = king_devick_stimuli\test2_card.jpg
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
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    KeyboardComponent test2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test3_card
    CodeComponent test3_code
      Code Type = Py
      Begin Experiment:
        marker.send_marker("stimuli_start")
    ImageComponent test3_image
      image = king_devick_stimuli\test3_card.jpg
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
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    KeyboardComponent test3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Begin Experiment:
        import os
        # path to kernel socket module
        cwd = os.getcwd()
        os.chdir("..")
        kernel_socket_path = os.path.join(os.getcwd(), "main", "kernel_socket")
        os.chdir(cwd)
        import sys
        sys.path.insert(0, kernel_socket_path)
        from kernel_socket import Marker
        marker = Marker()

        marker.send_marker("experiment_start")
  Routine post_demo_code
    CodeComponent post_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("practice_end")
  Routine post_stimuli_code
    CodeComponent post_stim_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("stimuli_end")
  Routine experiment_end_code
    CodeComponent end_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("experiment_end")
Flow
  Routine initial_exp_code
  Routine instructions
  Routine demo_card_instructions
  Routine demo_card
  Routine post_demo_code
  Routine test1_card_instructions
  Routine test1_card
  Routine post_stimuli_code
  Routine test2_card_instructions
  Routine test2_card
  Routine post_stimuli_code
  Routine test3_card_instructions
  Routine test3_card
  Routine post_stimuli_code
  Routine experiment_end_code
