PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = n_back
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Routines
  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        These are the instructions for the N-back experiment.

        Press SPACE to continue.
    KeyboardComponent instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_zero_back
    TextComponent zero_back_num_stim
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $num_stim
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    KeyboardComponent zero_back_resp
      allowedKeys = 'space'
      correctAns = $match
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      storeCorrect = True
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  Routine rest_20
    TextComponent rest_20_text
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
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  Routine zero_back_prompt
    TextComponent zero_back_prompt_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = $"0-back trial. \n\n Press SPACE if the number is: " + str(match)
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  Routine inter_stimuli_interval
    TextComponent inter_stimuli_interval_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine code_setup
    CodeComponent code
      Code Type = Py
      Before Experiment:
        import os
        csv_dir = r"C:\Users\zackg\OneDrive\Ayaz Lab\KernelFlow_PsychoPy\n_back\n_back_conditions"

        # create file names and paths for each condition
        for filename in os.listdir(csv_dir):
            if "zero" in filename:
                zero_csv = filename
                zero_csv_path = os.path.join(csv_dir, zero_csv)
            elif "one" in filename:
                one_csv = filename
                one_csv_path = os.path.join(csv_dir, one_csv)
            elif "two" in filename:
                two_csv = filename
                two_csv_path = os.path.join(csv_dir, two_csv)

        # get stimulus condition for 0-back
        split_csv = zero_csv.split("-")
        split_match = split_csv[1].split("_")
        match = split_match[1]
  Routine one_back_prompt
    TextComponent one_back_prompt_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        1-back trial.

        Press SPACE if the current number matches the previous number.
  Routine trial_one_back
    TextComponent one_back_num_stim
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $num_stim
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    KeyboardComponent one_back_resp
      allowedKeys = 'space'
      correctAns = $match
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      storeCorrect = True
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  Routine two_back_prompt
    TextComponent two_back_prompt_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        2-back trial.

        Press SPACE if the current number matches the number two back.
  Routine trial_two_back
    TextComponent two_back_num_stim
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $num_stim
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    KeyboardComponent two_back_resp
      allowedKeys = 'space'
      correctAns = $match
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      storeCorrect = True
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Flow
  Routine code_setup
  Routine instructions
  Routine zero_back_prompt
  LoopInitiator zero_back_outer_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    LoopInitiator zero_back_loop loopType="TrialHandler"
      conditionsFile = $zero_csv_path
      loopType = sequential
      nReps = 1
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      Routine trial_zero_back
      Routine inter_stimuli_interval
    LoopTerminator zero_back_loop
  LoopTerminator zero_back_outer_loop
  Routine one_back_prompt
  LoopInitiator one_back_outer_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    LoopInitiator one_back_loop loopType="TrialHandler"
      conditionsFile = $one_csv_path
      loopType = sequential
      nReps = 1
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      Routine trial_one_back
      Routine inter_stimuli_interval
    LoopTerminator one_back_loop
  LoopTerminator one_back_outer_loop
  Routine two_back_prompt
  LoopInitiator two_back_outer_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    LoopInitiator two_back_loop loopType="TrialHandler"
      conditionsFile = $two_csv_path
      loopType = sequential
      nReps = 1
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      Routine trial_two_back
      Routine inter_stimuli_interval
    LoopTerminator two_back_loop
  LoopTerminator two_back_outer_loop
