PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = resting_state
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Routines
  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the resting state task.

        Please close your eyes and sit quietly for 7 minutes.

        Press SPACE when ready to begin.
    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    TextComponent trial_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 420
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  Routine done
    SoundComponent done_sound
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent done_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = The resting state trial is now complete.
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  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Begin Experiment:
        import os
        # path to kernel socket module
        cwd = os.getcwd()
        os.chdir("..")
        kernel_socket_path = os.path.join(os.getcwd(), "main", "kernel_socket")
        os.chdir(cwd)
        import sys
        sys.path.insert(0, kernel_socket_path)
        from kernel_socket import Marker
        marker = Marker()

        marker.send_marker("experiment_start")
  Routine experiment_end_code
    CodeComponent end_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("experiment_end")
Flow
  Routine initial_exp_code
  Routine welcome
  Routine trial
  Routine done
  Routine experiment_end_code
