PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SAT
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Routines
  Routine inter_stim_code
    CodeComponent code
      Code Type = Auto->JS
  Routine delay
    TextComponent delay_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine signal_event
    PolygonComponent vSAT_square
      fillColor = white
      opacity [set every repeat] = int(stim_event)
      pos [set every repeat] = $[x_pos, y_pos]
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_time
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  Routine response_cue
    SoundComponent response_cue_sound
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.43
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  Routine signal_response
    TextComponent signal_response_text
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Signal present?
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    MouseComponent mouse_resp
      clickable = stimuli_background
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent stimuli_background
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine feedback
    SoundComponent feedback_sound
      sound = B
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      volume [set every repeat] = correct_resp
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  Routine inter_stimulus_time
    TextComponent inter_stim_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $inter_stim_time
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  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Begin Experiment:
        import os
        exp_dir = os.getcwd()
        loop_num = -1  # increased by 1 each loop

        SAT_conditions_dir = r"C:\Users\zackg\OneDrive\Ayaz Lab\KernelFlow_PsychoPy\vSAT\SAT_conditions"
        vSAT_conditions_dir = r"C:\Users\zackg\OneDrive\Ayaz Lab\KernelFlow_PsychoPy\vSAT\vSAT_conditions"

        SAT_csv_list = []
        vSAT_csv_list = []

        for csv_filename in os.listdir(SAT_conditions_dir):
            SAT_csv_list.append(os.path.join("SAT_conditions", csv_filename))

        for csv_filename in os.listdir(vSAT_conditions_dir):
            vSAT_csv_list.append(os.path.join("vSAT_conditions", csv_filename))

        for filename in os.listdir(exp_dir):
            if "vSAT_task_order-" in filename:
                vSAT_task_order = filename
  Routine signal_response_code
    CodeComponent response_code
      Code Type = Py
      Begin Routine:
        mouse_press = mouse_resp.getPressed()
        if mouse_press[0] == 1:  # left click
            left_click = 1
            right_click = 0
        elif mouse_press[2] == 1:  # right click
            left_click = 0
            right_click = 1
        else:
            left_click = 0
            right_click = 0

        if stim_event == 1 and left_click == 1:     # if stim and right click
            correct_resp = 1
        elif stim_event == 0 and right_click == 1:  # if no stim and left click
            correct_resp = 1
        else:  # if incorrect response
            correct_resp = 0
  Routine main_loop_code
    CodeComponent outer_loop_code
      Code Type = Py
      Begin Routine:
        if task_order == "SAT1":
            this_loop_conditions = SAT_csv_list[0]
            SAT_text_display = 1
            vSAT_text_display = 0
        elif task_order == "SAT2":
            this_loop_conditions = SAT_csv_list[1]
            SAT_text_display = 1
            vSAT_text_display = 0
        elif task_order == "vSAT1":
            this_loop_conditions = vSAT_csv_list[0]
            SAT_text_display = 0
            vSAT_text_display = 1
        elif task_order == "vSAT2":
            this_loop_conditions = vSAT_csv_list[1]
            SAT_text_display = 0
            vSAT_text_display = 1
  Routine vSAT_loop_code
  Routine initial_instructions
    TextComponent instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the Sustained Attention Task.

        LEFT CLICK the mouse if the signal is present.
        RIGHT CLICK the mouse if the signal is not present.

        Press SPACE to begin the experiment.
    KeyboardComponent instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine experiment_instructions
    TextComponent experiment_SAT_text
      letterHeight = 0.1
      opacity [set every repeat] = SAT_text_display
      startVal [time (s)] = 0.0
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      text:
        This is a SAT trial.

        Press SPACE to continue.
    TextComponent experiment_vSAT_text
      letterHeight = 0.1
      opacity [set every repeat] = vSAT_text_display
      startVal [time (s)] = 0.0
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      text:
        This is a vSAT trial.

        Press SPACE to continue.
    KeyboardComponent experiment_instructions_rep
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine initial_exp_code
  Routine initial_instructions
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = $vSAT_task_order
    loopType = sequential
    nReps = 1
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    Routine main_loop_code
    Routine experiment_instructions
    LoopInitiator vSAT_loop loopType="TrialHandler"
      conditionsFile = $this_loop_conditions
      loopType = sequential
      nReps = 1
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      Routine inter_stimulus_time
      Routine signal_event
      Routine delay
      Routine response_cue
      Routine signal_response
      Routine signal_response_code
      Routine feedback
    LoopTerminator vSAT_loop
  LoopTerminator main_loop
